PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial 3
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_Distr = 10
            thisExp.addData('num_Distr', num_Distr)
        else:
            num_Distr = 5
            thisExp.addData('num_Distr', num_Distr)

        distractors = []

        for i in range(num_Distr):

            Distr = visual.TextStim(win=win, name='Distr',
                    text='L',
                    font='Arial',
                    pos=(random()-0.5, random()-0.5), draggable=False, height=0.05, wrapWidth=None, ori=randint(0,360),
                    color='white', colorSpace='rgb', opacity=None,
                    languageStyle='LTR',
                    depth=-2.0);

            distractors.append(Distr)


        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    endPoints = [0,1]
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
